PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    TextComponent Ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 64
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent Done
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
