PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = vm_testing_generalization_untested_direction_no_feedback
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Routines
  Routine rotated
    PolygonComponent outer_2
      disabled = True
      fillColor = $[0, 0, 0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent inner_2
      fillColor = $[0,0,0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.7, 0.7)
      startVal [time (s)] = 0
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    PolygonComponent fixation_2
      fillColor = $[1,1,1]
      nVertices = 64
      opacity [set every frame] = 1 - fixation_2.overlaps(inner_2)
      pos [set every repeat] = [0, 0]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    MouseComponent mouse_fixation_2
      clickable = target_2
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0
      stopVal [condition] = not fixation_2.overlaps(inner_2)
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    PolygonComponent target_2
      fillColor = $[1,1,1]
      opacity [set every repeat] = 1
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $isi
      stopVal [condition] = fixation_2.overlaps(target_2)
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        core.wait(normal(0.75, 0.5))
        isi = normal(0.75, 0.5)
        thisExp.addData('isi',isi)
        mouse_fixation_2.setPos((0, 0))
        win.mouseVisible = False
      Each Frame:
        mouse_pos = mouse_fixation_2.getPos()
        new_mouse_pos = mouse_pos[0]*cos(pi*rotation/180) - mouse_pos[1]*sin(pi*rotation/180), mouse_pos[0]*sin(pi*rotation/180) + mouse_pos[1]*cos(pi*rotation/180)
        fixation_2.pos = new_mouse_pos[0], new_mouse_pos[1]
        if mouse_fixation_2.getPressed()[0]:
            fixation_2.opacity = 0
            if not (fixation_2.overlaps(inner_2)):
                fixation_2.opacity = 1
                win.flip()
                if (fixation_2.overlaps(target_2)):
                    target_2.opacity = 0
                    win.flip()
                continueRoutine = False
        else:
            fixation_2.opacity = 1
            mouse_fixation_2.setPos((0, 0))
      End Routine:
        fixation_2.opacity = 1
        core.wait(1.0)
        #mouse_fixation.setPos((0, 0))
  Routine baseline
    PolygonComponent outer
      disabled = True
      fillColor = $[0, 0, 0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent inner
      fillColor = $[0,0,0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.7, 0.7)
      startVal [time (s)] = 0
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      nVertices = 64
      opacity [set every frame] = 1 - fixation.overlaps(inner)
      pos [set every repeat] = [0, 0]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    MouseComponent mouse_fixation
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0
      stopVal [condition] = not fixation.overlaps(inner)
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    PolygonComponent target
      fillColor = $[1,1,1]
      opacity [set every repeat] = 1
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $isi
      stopVal [condition] = fixation.overlaps(target)
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        core.wait(normal(0.75, 0.5))
        isi = normal(0.75, 0.5)
        thisExp.addData('isi', isi)
        mouse_fixation.setPos((0, 0))
        win.mouseVisible = False
      Each Frame:
        mouse_pos = mouse_fixation.getPos()
        new_mouse_pos = mouse_pos[0]*cos(pi*rotation/180) - mouse_pos[1]*sin(pi*rotation/180), mouse_pos[0]*sin(pi*rotation/180) + mouse_pos[1]*cos(pi*rotation/180)
        fixation.pos = new_mouse_pos[0], new_mouse_pos[1]
        if mouse_fixation.getPressed()[0]:
            fixation.opacity = 0
            if not (fixation.overlaps(inner)):
                fixation.opacity = 1
                win.flip()
                if (fixation.overlaps(target)):
                    target.opacity = 0
                    win.flip()
                continueRoutine = False
        else:
            fixation.opacity = 1
            mouse_fixation.setPos((0, 0))
      End Routine:
        fixation.opacity = 1
        fixation.pos = ((0, 0))
        core.wait(1.0)
        #mouse_fixation.setPos((0, 0))
  Routine transfer
    PolygonComponent outer_3
      disabled = True
      fillColor = $[0, 0, 0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent inner_3
      fillColor = $[0,0,0]
      lineColor = $[1,0,0]
      nVertices = 64
      shape = regular polygon...
      size = (0.7, 0.7)
      startVal [time (s)] = 0
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    PolygonComponent fixation_3
      fillColor = $[1,1,1]
      nVertices = 64
      opacity [set every frame] = 1 - fixation_3.overlaps(inner_3)
      pos [set every repeat] = [0, 0]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    MouseComponent mouse_fixation_3
      clickable = target_3
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0
      stopVal [condition] = not fixation_3.overlaps(inner_3)
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    PolygonComponent target_3
      fillColor = $[1,1,1]
      opacity [set every repeat] = 1
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $isi
      stopVal [condition] = fixation_3.overlaps(target_3)
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        core.wait(normal(0.75, 0.5))
        isi = normal(0.75, 0.5)
        thisExp.addData('isi', isi)
        mouse_fixation_3.setPos((0, 0))
        win.mouseVisible = False
      Each Frame:
        mouse_pos = mouse_fixation_3.getPos()
        new_mouse_pos = mouse_pos[0]*cos(pi*rotation/180) - mouse_pos[1]*sin(pi*rotation/180), mouse_pos[0]*sin(pi*rotation/180) + mouse_pos[1]*cos(pi*rotation/180)
        fixation_3.pos = new_mouse_pos[0], new_mouse_pos[1]
        if mouse_fixation_3.getPressed()[0]:
            fixation_3.opacity = 0
            if not (fixation_3.overlaps(inner_3)):
                fixation_3.opacity = 1
                win.flip()
                if (fixation_3.overlaps(target_3)):
                    target_3.opacity = 0
                    win.flip()
                continueRoutine = False
        else:
            fixation_3.opacity = 1
            mouse_fixation_3.setPos((0, 0))
      End Routine:
        fixation_3.opacity = 1
        fixation_3.pos = ((0, 0))
        core.wait(1.0)
        #mouse_fixation.setPos((0, 0))
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_baseline.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)])]
    Routine baseline
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_rotated_sudden.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 90)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 90)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 90)])]
    Routine rotated
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions_baseline.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', 0.28), ('rotation', 0)]),
      OrderedDict([('target_x', -0.28), ('target_y', -0.28), ('rotation', 0)]),
      OrderedDict([('target_x', 0.28), ('target_y', -0.28), ('rotation', 0)])]
    Routine transfer
  LoopTerminator trials_3
