PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    TextComponent text_experiment_starts_now
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Ready?

        The experiment starts now!
    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 01.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent circle
      fillColor = $[1,1,1]
      nVertices = 4000
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 4.0
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Flow
  Routine trial
